PsychoPy2experiment version="2020.1.2"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = handedness
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Routines
  Routine instruktion
    TextComponent text_1
      letterHeight = 0.05
      startVal [time (s)] = 0
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      text:
        Hej! Här kommer du snart få svara på några frågor om handdominans.

        Du kan trycka på valfri tangent för att fortsätta.
    KeyboardComponent key_resp_1
      forceEndRoutine = True
      startVal [time (s)] = 1
      store = nothing
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  Routine instruktion2
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 1
      store = nothing
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0
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      text:
        Ange vilken hand du föredrar att använda för var och en av aktiviteterna du kommer se genom att trycka på tangenterna
        V (för vänster hand) eller H (för höger hand) på tangentbordet.
  Routine intruktion3
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0
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      text:
        I de fall där du har en stark preferens för att använda den ena handen framför den andra, så till den grad att du aldrig skulle använda
        den andra handen om du inte absolut måste, tryck på PIL VÄNSTER, för vänster hand, och PIL HÖGER, om det gäller höger hand.
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      startVal [time (s)] = 1
      store = nothing
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  Routine trial
    TextComponent trial_text
      letterHeight = 0.1
      startVal [time (s)] = 0
      text [set every repeat] = $stimFile
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    KeyboardComponent key_resp
      allowedKeys = 'v','h','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine instruktion4
    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0
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      text:
        I de fall där det inte spelar någon roll vilken hand du använder, tryck på mellanslag.

        Vissa av aktiviteterna förutsätter användning av båda händerna. I dessa fall är de delar av
        aktiviteten eller föremålet för vilka handdominansen efterfrågas angivna inom parentes.

        Tryck på valfri tangent för att börja.
    KeyboardComponent key_resp_4
      forceEndRoutine = True
      startVal [time (s)] = 1
      store = nothing
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  Routine tack
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4
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      text:
        Tack för dina svar!

        Du kan säga till experimentledaren att du är färdig.
Flow
  Routine instruktion
  Routine instruktion2
  Routine intruktion3
  Routine instruktion4
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('stimFile', 'Skriva')]),
      OrderedDict([('stimFile', 'Rita')]),
      OrderedDict([('stimFile', 'Kasta')]),
      OrderedDict([('stimFile', 'Klippa')]),
      OrderedDict([('stimFile', 'Borsta tänderna')]),
      OrderedDict([('stimFile', 'Skära (med kniv)')]),
      OrderedDict([('stimFile', 'Använda en sked')]),
      OrderedDict([('stimFile', 'Sopa (övre hand)')]),
      OrderedDict([('stimFile', 'Tända en tändsticka (håller i tändstickan)')]),
      OrderedDict([('stimFile', 'Öppna en låda (tar av locket)')])]
    Routine trial
  LoopTerminator trials
  Routine tack
